<?xml version="1.0" encoding="UTF-8"?><batch mzmine_version="3.9.0">
    <batchstep method="io.github.mzmine.modules.io.import_rawdata_all.AllSpectralDataImportModule" parameter_version="1">
        <parameter name="File names">
            <file>/export/bionlab_nfs/yhj_bionlab/exports/GNPS/OrientalHerb/mzml/40_Pae_mzml/neg/PaeW02_500ppm_cent_neg.mzML</file>
            <file>/export/bionlab_nfs/yhj_bionlab/exports/GNPS/OrientalHerb/mzml/09_Ara_mzml/neg/AraE04_500ppm_cent_neg.mzML</file>
            <file>/export/bionlab_nfs/yhj_bionlab/exports/GNPS/OrientalHerb/mzml/43_Thy_mzml/neg/ThyE01_500ppm_cent_neg.mzML</file>
            <file>/export/bionlab_nfs/yhj_bionlab/exports/GNPS/OrientalHerb/mzml/13_Ole_mzml/neg/OleW02_500ppm_cent_neg.mzML</file>
            <file>/export/bionlab_nfs/yhj_bionlab/exports/GNPS/OrientalHerb/mzml/15_Scr_mzml/neg/ScrE02_500ppm_cent_neg.mzML</file>
            <file>/export/bionlab_nfs/yhj_bionlab/exports/GNPS/OrientalHerb/mzml/27_Eup_mzml/neg/Eup50_02_500ppm_cent_neg.mzML</file>
            <file>/export/bionlab_nfs/yhj_bionlab/exports/GNPS/OrientalHerb/mzml/04_Umb_mzml/neg/Umb50_11_500ppm_cent_neg.mzML</file>
            <file>/export/bionlab_nfs/yhj_bionlab/exports/GNPS/OrientalHerb/mzml/88_Pip_mzml/neg/Pip50_01_500ppm_cent_neg.mzML</file>
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        </parameter>
        <parameter name="Advanced import" selected="false">
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        </parameter>
        <parameter name="Spectral library files"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_massdetection.MassDetectionModule" parameter_version="1">
        <parameter name="Raw data files" type="ALL_FILES"/>
        <parameter name="Scan filters" selected="true">
            <parameter name="Scan number"/>
            <parameter name="Base Filtering Integer"/>
            <parameter name="Retention time"/>
            <parameter name="Mobility"/>
            <parameter name="MS level filter" selected="MS1, level = 1">1</parameter>
            <parameter name="Scan definition"/>
            <parameter name="Polarity">Any</parameter>
            <parameter name="Spectrum type">ANY</parameter>
        </parameter>
        <parameter name="Scan types (IMS)">All scan types</parameter>
        <parameter name="Mass detector" selected_item="Centroid">
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            <module name="Centroid">
                <parameter name="Noise level">50000.0</parameter>
                <parameter name="Detect isotope signals below noise level" selected="true">
                    <parameter name="Chemical elements">H,C,N,O,S</parameter>
                    <parameter name="m/z tolerance">
                        <absolutetolerance>5.0E-4</absolutetolerance>
                        <ppmtolerance>10.0</ppmtolerance>
                    </parameter>
                    <parameter name="Maximum charge of isotope m/z">1</parameter>
                </parameter>
            </module>
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        </parameter>
        <parameter name="Denormalize fragment scans (traps)">false</parameter>
        <parameter name="Output netCDF filename (optional)" selected="false"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_massdetection.MassDetectionModule" parameter_version="1">
        <parameter name="Raw data files" type="ALL_FILES"/>
        <parameter name="Scan filters" selected="true">
            <parameter name="Scan number"/>
            <parameter name="Base Filtering Integer"/>
            <parameter name="Retention time"/>
            <parameter name="Mobility"/>
            <parameter name="MS level filter" selected="MS2, level = 2">1</parameter>
            <parameter name="Scan definition"/>
            <parameter name="Polarity">Any</parameter>
            <parameter name="Spectrum type">ANY</parameter>
        </parameter>
        <parameter name="Scan types (IMS)">All scan types</parameter>
        <parameter name="Mass detector" selected_item="Centroid">
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            <module name="Centroid">
                <parameter name="Noise level">2000.0</parameter>
                <parameter name="Detect isotope signals below noise level" selected="true">
                    <parameter name="Chemical elements">H,C,N,O,S</parameter>
                    <parameter name="m/z tolerance">
                        <absolutetolerance>5.0E-4</absolutetolerance>
                        <ppmtolerance>10.0</ppmtolerance>
                    </parameter>
                    <parameter name="Maximum charge of isotope m/z">1</parameter>
                </parameter>
            </module>
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        </parameter>
        <parameter name="Denormalize fragment scans (traps)">false</parameter>
        <parameter name="Output netCDF filename (optional)" selected="false"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_adapchromatogrambuilder.ModularADAPChromatogramBuilderModule" parameter_version="1">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scan filters" selected="true">
            <parameter name="Scan number"/>
            <parameter name="Base Filtering Integer"/>
            <parameter name="Retention time"/>
            <parameter name="Mobility"/>
            <parameter name="MS level filter" selected="MS1, level = 1">1</parameter>
            <parameter name="Scan definition"/>
            <parameter name="Polarity">Any</parameter>
            <parameter name="Spectrum type">ANY</parameter>
        </parameter>
        <parameter name="Minimum consecutive scans">7</parameter>
        <parameter name="Minimum intensity for consecutive scans">150000.0</parameter>
        <parameter name="Minimum absolute height">500000.0</parameter>
        <parameter name="m/z tolerance (scan-to-scan)">
            <absolutetolerance>0.002</absolutetolerance>
            <ppmtolerance>5.0</ppmtolerance>
        </parameter>
        <parameter name="Suffix">_XICs</parameter>
        <parameter name="Allow single scan chromatograms"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_smoothing.SmoothingModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Smoothing algorithm" selected_item="Loess smoothing">
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            <module name="Loess smoothing">
                <parameter name="Retention time width (scans)" selected="true">4</parameter>
                <parameter name="Mobility width (scans)" selected="false">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</parameter>
            </module>
        </parameter>
        <parameter name="Original feature list">REMOVE</parameter>
        <parameter name="Suffix">_smooth</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_chromatogramdeconvolution.minimumsearch.MinimumSearchFeatureResolverModule" parameter_version="2">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Suffix">_dconv</parameter>
        <parameter name="Original feature list">REMOVE</parameter>
        <parameter name="MS/MS scan pairing" selected="true">
            <parameter name="MS1 to MS2 precursor tolerance (m/z)">
                <absolutetolerance>0.002</absolutetolerance>
                <ppmtolerance>5.0</ppmtolerance>
            </parameter>
            <parameter name="Retention time filter" selected="Use feature edges" unit="MINUTES">0.2</parameter>
            <parameter name="Minimum relative feature height" selected="true">0.25</parameter>
            <parameter name="Minimum required signals" selected="false">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</parameter>
            <parameter name="Limit by ion mobility edges">false</parameter>
            <parameter name="Merge MS/MS spectra (TIMS)">false</parameter>
            <parameter name="Minimum signal intensity (absolute, TIMS)" selected="false">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</parameter>
            <parameter name="Minimum signal intensity (relative, TIMS)" selected="false">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</parameter>
        </parameter>
        <parameter name="Dimension">Retention time</parameter>
        <parameter name="Chromatographic threshold">0.9</parameter>
        <parameter name="Minimum search range RT/Mobility (absolute)">0.05</parameter>
        <parameter name="Minimum relative height">0.0</parameter>
        <parameter name="Minimum absolute height">500000.0</parameter>
        <parameter name="Min ratio of peak top/edge">1.5</parameter>
        <parameter name="Peak duration range (min/mobility)">
            <min>0.0</min>
            <max>2.0</max>
        </parameter>
        <parameter name="Minimum scans (data points)">5</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_isotopegrouper.IsotopeGrouperModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Name suffix">_diso</parameter>
        <parameter name="m/z tolerance (intra-sample)">
            <absolutetolerance>0.001</absolutetolerance>
            <ppmtolerance>3.5</ppmtolerance>
        </parameter>
        <parameter name="Retention time tolerance" unit="MINUTES">0.01</parameter>
        <parameter name="Mobility tolerance" selected="false">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</parameter>
        <parameter name="Monotonic shape">true</parameter>
        <parameter name="Maximum charge">1</parameter>
        <parameter name="Representative isotope">Most intense</parameter>
        <parameter name="Never remove feature with MS2">true</parameter>
        <parameter name="Original feature list">REMOVE</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_isotopefinder.IsotopeFinderModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Chemical elements">H,C,N,O,S,Cl</parameter>
        <parameter name="m/z tolerance (feature-to-scan)">
            <absolutetolerance>0.001</absolutetolerance>
            <ppmtolerance>3.5</ppmtolerance>
        </parameter>
        <parameter name="Maximum charge of isotope m/z">1</parameter>
        <parameter name="Search in scans">SINGLE MOST INTENSE</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.align_join.JoinAlignerModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Feature list name">Feature_table</parameter>
        <parameter name="m/z tolerance (sample-to-sample)">
            <absolutetolerance>0.002</absolutetolerance>
            <ppmtolerance>5.0</ppmtolerance>
        </parameter>
        <parameter name="Weight for m/z">1.0</parameter>
        <parameter name="Retention time tolerance" unit="MINUTES">0.08</parameter>
        <parameter name="Weight for RT">1.0</parameter>
        <parameter name="Mobility tolerance" selected="false">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</parameter>
        <parameter name="Mobility weight">0.0</parameter>
        <parameter name="Require same charge state">false</parameter>
        <parameter name="Require same ID">false</parameter>
        <parameter name="Compare isotope pattern" selected="false">
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        </parameter>
        <parameter name="Compare spectra similarity" selected="false">
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        </parameter>
        <parameter name="Original feature list">REMOVE</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_duplicatefilter.DuplicateFilterModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Name suffix">_dup-filt</parameter>
        <parameter name="Filter mode">NEW AVERAGE</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>5.0E-4</absolutetolerance>
            <ppmtolerance>2.0</ppmtolerance>
        </parameter>
        <parameter name="RT tolerance" unit="MINUTES">0.02</parameter>
        <parameter name="Mobility tolerance" selected="false">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</parameter>
        <parameter name="Require same identification">false</parameter>
        <parameter name="Original feature list">REMOVE</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.group_metacorrelate.corrgrouping.CorrelateGroupingModule" parameter_version="2">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="RT tolerance" unit="MINUTES">0.01</parameter>
        <parameter name="Minimum feature height">0.0</parameter>
        <parameter name="Intensity threshold for correlation">0.0</parameter>
        <parameter name="Min samples filter">
            <parameter name="Min samples in all">
                <abs>1</abs>
                <rel>0.0</rel>
            </parameter>
            <parameter name="Min samples in group">
                <abs>0</abs>
                <rel>0.0</rel>
            </parameter>
            <parameter name="Min %-intensity overlap">0.6</parameter>
            <parameter name="Exclude gap-filled features">true</parameter>
        </parameter>
        <parameter name="Feature shape correlation" selected="true">
            <parameter name="Min data points">6</parameter>
            <parameter name="Min data points on edge">3</parameter>
            <parameter name="Measure">PEARSON</parameter>
            <parameter name="Min feature shape correlation">0.85</parameter>
            <parameter name="Min total correlation" selected="false">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</parameter>
        </parameter>
        <parameter name="Feature height correlation" selected="false">
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        </parameter>
        <parameter name="Suffix (or auto)" selected="true">_metaCorr</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.id_ion_identity_networking.ionidnetworking.IonNetworkingModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="m/z tolerance (intra-sample)">
            <absolutetolerance>0.001</absolutetolerance>
            <ppmtolerance>3.5</ppmtolerance>
        </parameter>
        <parameter name="Check">ONE FEATURE</parameter>
        <parameter name="Min height">0.0</parameter>
        <parameter name="Ion identity library">
            <parameter name="MS mode">NEGATIVE</parameter>
            <parameter name="Maximum charge">2</parameter>
            <parameter name="Maximum molecules/cluster">2</parameter>
            <parameter name="Adducts">
                <adduct_type selected="true">
                    <subpart charge="-1" mass_difference="-1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                </adduct_type>
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                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="22.989218" mol_formula="Na" name="Na" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="38.963158" mol_formula="K" name="K" type="ADDUCT"/>
                </adduct_type>
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                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                    <subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                </adduct_type>
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            </parameter>
        </parameter>
        <parameter name="Annotation refinement" selected="true">
            <parameter name="Minimum size" selected="false">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</parameter>
            <parameter name="Delete small networks without major ion">true</parameter>
            <parameter name="Delete smaller networks: Link threshold" selected="true">4</parameter>
            <parameter name="Delete networks without monomer">true</parameter>
            <parameter name="Delete rows witout ion id">false</parameter>
        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_blanksubtraction.FeatureListBlankSubtractionModule" parameter_version="1">
        <parameter name="Aligned feature list" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Blank/Control raw data files" type="SPECIFIC_FILES">
            <specific_file path="/export/bionlab_nfs/yhj_bionlab/exports/GNPS/OrientalHerb/mzml/blank/neg/240208_Blank_50_MeOH_IS2_DDA_cent_neg_20240209213548.mzML">240208_Blank_50_MeOH_IS2_DDA_cent_neg_20240209213548.mzML</specific_file>
            <specific_file path="/export/bionlab_nfs/yhj_bionlab/exports/GNPS/OrientalHerb/mzml/blank/neg/240419_Blank_MeOH_DDA_cent_neg_20240420072351.mzML">240419_Blank_MeOH_DDA_cent_neg_20240420072351.mzML</specific_file>
            <specific_file path="/export/bionlab_nfs/yhj_bionlab/exports/GNPS/OrientalHerb/mzml/blank/neg/231214_Blank_50_MeOH_IS2_DDA_cent_neg_20231214135112.mzML">231214_Blank_50_MeOH_IS2_DDA_cent_neg_20231214135112.mzML</specific_file>
            <specific_file path="/export/bionlab_nfs/yhj_bionlab/exports/GNPS/OrientalHerb/mzml/blank/neg/240411_Blank_MeOH_DDA_cent_neg_20240412084455.mzML">240411_Blank_MeOH_DDA_cent_neg_20240412084455.mzML</specific_file>
            <specific_file path="/export/bionlab_nfs/yhj_bionlab/exports/GNPS/OrientalHerb/mzml/blank/neg/240223_Blank_50_MeOH_IS2_DDA_cent_neg_20240225191905.mzML">240223_Blank_50_MeOH_IS2_DDA_cent_neg_20240225191905.mzML</specific_file>
            <specific_file path="/export/bionlab_nfs/yhj_bionlab/exports/GNPS/OrientalHerb/mzml/blank/neg/240211_Blank_50_MeOH_IS2_DDA_cent_neg_20240212203906.mzML">240211_Blank_50_MeOH_IS2_DDA_cent_neg_20240212203906.mzML</specific_file>
            <specific_file path="/export/bionlab_nfs/yhj_bionlab/exports/GNPS/OrientalHerb/mzml/blank/neg/240406_Blank_MeOH_DDA_cent_neg_20240409124136.mzML">240406_Blank_MeOH_DDA_cent_neg_20240409124136.mzML</specific_file>
            <specific_file path="/export/bionlab_nfs/yhj_bionlab/exports/GNPS/OrientalHerb/mzml/blank/neg/240410_Blank_MeOH_DDA_cent_neg_20240411013934.mzML">240410_Blank_MeOH_DDA_cent_neg_20240411013934.mzML</specific_file>
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            <name_pattern>Blank</name_pattern>
        </parameter>
        <parameter name="Minimum # of detection in blanks">1</parameter>
        <parameter name="Quantification">Height</parameter>
        <parameter name="Ratio type">MAXIMUM</parameter>
        <parameter name="Fold change increase" selected="true">3.0</parameter>
        <parameter name="Keep or remove features (of rows) below fold change">REMOVE - Only keep features above fold change</parameter>
        <parameter name="Create secondary list of subtracted features">false</parameter>
        <parameter name="Suffix">subtracted</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_rowsfilter.RowsFilterModule" parameter_version="2">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Name suffix">_metgem</parameter>
        <parameter name="Minimum aligned features (samples)" selected="true">
            <abs>2</abs>
            <rel>0.0</rel>
        </parameter>
        <parameter name="Minimum features in an isotope pattern" selected="false">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</parameter>
        <parameter name="Validate 13C isotope pattern" selected="false">
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        </parameter>
        <parameter name="Remove redundant isotope rows">false</parameter>
        <parameter name="m/z" selected="false"/>
        <parameter name="Retention time" selected="true">
            <min>0.0</min>
            <max>15.0</max>
        </parameter>
        <parameter name="features duration range" selected="false">
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        </parameter>
        <parameter name="Chromatographic FWHM" selected="false">
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        </parameter>
        <parameter name="Charge" selected="false">
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        </parameter>
        <parameter name="Kendrick mass defect" selected="false">
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        </parameter>
        <parameter name="Parameter">No parameters defined</parameter>
        <parameter name="Only identified?">false</parameter>
        <parameter name="Text in identity" selected="false"/>
        <parameter name="Text in comment" selected="false"/>
        <parameter name="Keep or remove rows">Keep rows that match all criteria</parameter>
        <parameter name="Feature with MS2 scan">true</parameter>
        <parameter name="Never remove feature with MS2">false</parameter>
        <parameter name="Reset the feature number ID">true</parameter>
        <parameter name="Mass defect" selected="false"/>
        <parameter name="Original feature list">REMOVE</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.export_features_gnps.fbmn.GnpsFbmnExportAndSubmitModule" parameter_version="2">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Filename">
            <current_file>/export/bionlab_nfs/yhj_bionlab/exports/GNPS/OrientalHerb/GNPS_IMMN/blksubtraction_test1_neg.mgf</current_file>
        </parameter>
        <parameter name="Merge MS/MS (experimental)" selected="true">
            <parameter name="Select spectra to merge">across samples</parameter>
            <parameter name="m/z merge mode">weighted average (remove outliers)</parameter>
            <parameter name="intensity merge mode">sum intensities</parameter>
            <parameter name="Expected mass deviation">
                <absolutetolerance>0.002</absolutetolerance>
                <ppmtolerance>5.0</ppmtolerance>
            </parameter>
            <parameter name="Cosine threshold (%)">0.0</parameter>
            <parameter name="Signal count threshold (%)">0.0</parameter>
            <parameter name="Isolation window offset (m/z)">0.0</parameter>
            <parameter name="Isolation window width (m/z)">0.8</parameter>
        </parameter>
        <parameter name="Filter rows">ALL</parameter>
        <parameter name="Feature intensity">Area</parameter>
        <parameter name="CSV export">SIMPLE</parameter>
        <parameter name="Submit to GNPS" selected="false">
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        </parameter>
        <parameter name="Open folder">false</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.export_features_sirius.SiriusExportModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Filename">
            <current_file>/export/bionlab_nfs/yhj_bionlab/exports/GNPS/OrientalHerb/GNPS_IMMN/blksubtraction_sirius_test1_neg.mgf</current_file>
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        </parameter>
        <parameter name="Merge MS/MS" selected="true">
            <parameter name="Select spectra to merge">across samples</parameter>
            <parameter name="m/z merge mode">weighted average (remove outliers)</parameter>
            <parameter name="intensity merge mode">sum intensities</parameter>
            <parameter name="Expected mass deviation">
                <absolutetolerance>0.001</absolutetolerance>
                <ppmtolerance>5.0</ppmtolerance>
            </parameter>
            <parameter name="Cosine threshold (%)">0.7</parameter>
            <parameter name="Signal count threshold (%)">0.2</parameter>
            <parameter name="Isolation window offset (m/z)">0.0</parameter>
            <parameter name="Isolation window width (m/z)">3.0</parameter>
        </parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.002</absolutetolerance>
            <ppmtolerance>5.0</ppmtolerance>
        </parameter>
        <parameter name="Only rows with annotation">false</parameter>
        <parameter name="Exclude multiple charge">false</parameter>
        <parameter name="Exclude multimers">false</parameter>
    </batchstep>
</batch>
